<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_mzml.MSDKmzMLImportModule" parameter_version="1">
        <parameter name="File names">
            <file>/home/user/Documents/Audrey/converted data/Unifr/1685365277_ALC_01.mzML</file>
            <file>/home/user/Documents/Audrey/converted data/Unifr/1685365277_ALC_dbgi_001152_01_01.mzML</file>
            <file>/home/user/Documents/Audrey/converted data/Unifr/1685365277_ALC_dbgi_001153_01_01.mzML</file>
            <file>/home/user/Documents/Audrey/converted data/Unifr/1685365277_ALC_dbgi_001161_01_01.mzML</file>
            <file>/home/user/Documents/Audrey/converted data/Unifr/1685365277_ALC_dbgi_001162_01_01.mzML</file>
            <file>/home/user/Documents/Audrey/converted data/Unifr/1685365277_ALC_dbgi_001175_01_01.mzML</file>
            <file>/home/user/Documents/Audrey/converted data/Unifr/1685365277_ALC_dbgi_001182_01_01.mzML</file>
            <file>/home/user/Documents/Audrey/converted data/Unifr/1685365277_ALC_dbgi_001185_01_01.mzML</file>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>1.9</min>
                <max>10.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">2</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">+</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">50000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>1.9</min>
                <max>10.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS2, level = 2">2</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">+</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>12.01</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">2</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">+</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">50000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>12.01</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS2, level = 2">2</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">+</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>1.9</min>
                <max>10.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">+</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">50000.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.ADAPpeakpicking.AdapResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use tolerance" unit="MINUTES">0.4</parameter>
            <parameter name="Minimum relative feature height" selected="false">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</parameter>
            <parameter name="Minimum required signals" selected="false">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</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="false">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</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="S/N threshold">30.0</parameter>
        <parameter name="S/N estimator" selected_item="Intensity window SN">
            <module name="Intensity window SN"/>
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        </parameter>
        <parameter name="min feature height">100000.0</parameter>
        <parameter name="Coefficient/area threshold">110.0</parameter>
        <parameter name="Peak duration range">
            <min>0.01</min>
            <max>1.0</max>
        </parameter>
        <parameter name="RT wavelet range">
            <min>0.01</min>
            <max>0.8</max>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>8.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.03</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">3</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Minimum aligned features (samples)" selected="false">
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        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="true">
            <min>0.5</min>
            <max>12.0</max>
        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Reset the feature number ID">true</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">filtered Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.008</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">2.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.2</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Mobility weight">0.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.PeakFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.15</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.015</parameter>
        <parameter name="RT correction">false</parameter>
        <parameter name="Parallel (never combined with RT correction)">false</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum feature height">0.0</parameter>
        <parameter name="Intensity threshold for correlation">0.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>2</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Minimum samples">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="true">grouped</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ONE FEATURE</parameter>
        <parameter name="Min height">10000.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="MS mode">POSITIVE</parameter>
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">3</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="HFA" type="CLUSTER"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="41.026549" mol_formula="CH3CN" name="ACN" type="CLUSTER"/>
                </modification_type>
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            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/home/user/Documents/Audrey/gitrepo/ornamental/clematis_dbgi/pos/results/mzmine/clematis_10_species_crop2-10min_231127_orbi_sirius.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.001</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.7</parameter>
            <parameter name="Signal count threshold (%)">0.2</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">3.0</parameter>
        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/home/user/Documents/Audrey/gitrepo/ornamental/clematis_dbgi/pos/results/mzmine/clematis_10_species_crop2-10min_231127_orbi_sirius.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.001</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.7</parameter>
            <parameter name="Signal count threshold (%)">0.2</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">3.0</parameter>
        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
